CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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notes:['This module converts the segmentation mask image into individual objects.']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
    Select the input image:DNA
    Name the output object:ConvertImageToObjects
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

FilterObjects:[module_num:6|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notes:['The module filters objects (cells) which are adjoining to the image borders.']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
    Select the objects to filter:ConvertImageToObjects
    Name the output objects:FilterObjectsBorder
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
MeasureObjectIntensityMultichannel:[module_num:7|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notes:['This module extract the intensities of each cell for all selected images/channels. Make sure to select FilterObjectsBorder as the objects to measure.']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
    Select images to measure:DNA
    Select objects to measure:FilterObjectsBorder
    How many channels does the image have?:1

MeasureObjectSizeShape:[module_num:8|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notes:['This module extract the size and shape of each cell. Make sure to select FilterObjectsBorder as the objects to measure.']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
    Select object sets to measure:FilterObjectsBorder
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:9|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notes:["This module exports all measured single cell features. Make sure to select the relevant measurements by clicking the button 'Press button to select measurements' and choosing which measurements to export."]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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:SC_DATA
    Overwrite existing files without warning?:No
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